PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.2.5
  Window size (pixels) = [1366, 768]
  color = 1.0000, 1.0000, 1.0000
  expName = REMT
  keyboardBackend = Pyglet
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Routines
  Routine intro
    ButtonComponent button
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.05
      size = (.5,.3)
      startVal [time (s)] = 0
      text = Click anywhere to begin.
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  Routine practice
    ImageComponent image_2
      image [set every repeat] = practice.png
      size = (0.7, 0.55)
      startVal [time (s)] = 0.0
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    TextComponent textd_2
      color = grey
      letterHeight = 0.025
      pos = (0, .35)
      startVal [time (s)] = 0.0
      text = For each set of eyes, click the word that best describes what the person in the picture is thinking or feeling. You may feel that more than one word is applicable but please choose just one word, the word which you consider to be most suitable. Consider the example below.
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    TextComponent text_2
      color = grey
      letterHeight = 0.025
      pos = (0, -.35)
      startVal [time (s)] = 0.0
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      text:
        Before making your choice, make sure that you have read all 4 words. You should try to do the task as quickly as possible but you will not be timed. If you do not know what a word means you can look it up in the definition handout. When you are ready, press the space bar to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    ImageComponent image
      image [set every repeat] = $picture
      interpolate = nearest
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_click
      clickable = texta,textb,textc,textd
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ButtonComponent texta
      bold = False
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-.3,.3)
      save = last click
      size = (.25,.055)
      startVal [time (s)] = 0
      text [set every repeat] = $responseA
      timeRelativeTo = routine
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    ButtonComponent textb
      bold = False
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (.3, .3)
      save = last click
      size = (.25,.055)
      startVal [time (s)] = 0
      text [set every repeat] = $responseB
      timeRelativeTo = routine
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    ButtonComponent textc
      bold = False
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-.3, -.3)
      save = last click
      size = (.25,.055)
      startVal [time (s)] = 0
      text [set every repeat] = $responseC
      timeRelativeTo = routine
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    ButtonComponent textd
      bold = False
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (.3, -.3)
      save = last click
      size = (.25,.055)
      startVal [time (s)] = 0
      text [set every repeat] = $responseD
      timeRelativeTo = routine
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Flow
  Routine intro
  Routine practice
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condresp.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'picture': 'eyes/image1.jpg', 'responseA': 'playful', 'responseB': 'comforting', 'responseC': 'irritated', 'responseD': 'bored'},
      {'picture': 'eyes/image2.jpg', 'responseA': 'terrified', 'responseB': 'upset', 'responseC': 'arrogant', 'responseD': 'annoyed'},
      {'picture': 'eyes/image3.jpg', 'responseA': 'joking', 'responseB': 'flustered', 'responseC': 'desire', 'responseD': 'convinced'},
      {'picture': 'eyes/image4.jpg', 'responseA': 'joking', 'responseB': 'inisisting ', 'responseC': 'amused', 'responseD': 'relaxed'},
      {'picture': 'eyes/image5.jpg', 'responseA': 'irritated', 'responseB': 'worried', 'responseC': 'sarcastic', 'responseD': 'friendly'},
      {'picture': 'eyes/image6.jpg', 'responseA': 'aghast', 'responseB': 'fantasizing', 'responseC': 'impatient', 'responseD': 'alarmed'},
      {'picture': 'eyes/image7.jpg', 'responseA': 'apologetic', 'responseB': 'friendly', 'responseC': 'uneasy', 'responseD': 'dispirited'},
      {'picture': 'eyes/image8.jpg', 'responseA': 'despondent', 'responseB': 'relieved', 'responseC': 'shy', 'responseD': 'excited'},
      {'picture': 'eyes/image9.jpg', 'responseA': 'annoyed', 'responseB': 'hostile', 'responseC': 'horrified', 'responseD': 'preoccupied'},
      {'picture': 'eyes/image10.jpg', 'responseA': 'cautious', 'responseB': 'inisisting ', 'responseC': 'bored', 'responseD': 'aghast'},
      {'picture': 'eyes/image11.jpg', 'responseA': 'terrified', 'responseB': 'amused', 'responseC': 'regretful', 'responseD': 'flirtatious'}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
    Routine trial
  LoopTerminator trials
